<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.7.8">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names"/>
        <parameter name="Try vendor centroiding">true</parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_cropfilter.CropFilterModule" module_name="Crop filter" parameter_version="1">
        <parameter name="Raw data files" type="SPECIFIC_FILES">
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>2.0</min>
                <max>2.38</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z">
            <min>0.0</min>
            <max>1000.0</max>
        </parameter>
        <parameter name="Suffix">frac_01</parameter>
        <parameter name="Filter out empty scans">false</parameter>
        <parameter name="Remove source file after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="NAME_PATTERN">
            <name_pattern>* frac_01</name_pattern>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">500.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>38.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">2</parameter>
        <parameter name="Minimum intensity for consecutive scans">1000.0</parameter>
        <parameter name="Minimum absolute height">5000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.1</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics_01</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" module_name="Smoothing" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*eics_01</name_pattern>
        </parameter>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time width (scans)" selected="true">5</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm_01</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*sm_01</name_pattern>
        </parameter>
        <parameter name="Suffix">r_01</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.1</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="true">
                <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
                <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
                <parameter name="Group iterative MS2s" selected="false">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</parameter>
            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.8420000000000001</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.15</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">5000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.0</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>4.51</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" module_name="13C isotope filter (formerly: isotope grouper)" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*r_01</name_pattern>
        </parameter>
        <parameter name="Name suffix">deiso_01</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.1</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.08</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" module_name="Join aligner" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*deiso_01</name_pattern>
        </parameter>
        <parameter name="Feature list name">Aligned feature list_01</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.1</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.4</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" module_name="Feature finder (multithreaded)" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*Aligned feature list_01</name_pattern>
        </parameter>
        <parameter name="Name suffix">gaps_01</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.1</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.4</parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" module_name="Duplicate peak filter" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*gaps_01</name_pattern>
        </parameter>
        <parameter name="Name suffix">dup_01</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.05</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.11</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" module_name="Correlation grouping (metaCorrelate)" parameter_version="3">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*dup_01</name_pattern>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.11</parameter>
        <parameter name="Minimum feature height">5000.0</parameter>
        <parameter name="Intensity threshold for correlation">5000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.50</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">3</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="true">metacorr_01</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">false</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak_01</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>1</abs>
            <rel>0.50</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" module_name="Export to CSV file (modular)" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*peak_01</name_pattern>
        </parameter>
        <parameter name="Filename">
            <current_file>OUTPUT_PLACEHOLDER.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
